<?xml version='1.0' encoding='UTF-8'?>
<model xmlns="http://www.cellml.org/cellml/1.0#" xmlns:cellml="http://www.cellml.org/cellml/1.0#" xmlns:cmeta="http://www.cellml.org/metadata/1.0#" xmlns:bqbiol="http://biomodels.net/biology-qualifiers/" xmlns:rdf="http://www.w3.org/1999/02/22-rdf-syntax-ns#" name="cabo_2003_ical">
  <units name="C_per_mol">
    <unit units="second"/>
    <unit units="ampere"/>
    <unit units="mole" exponent="-1.0"/>
  </units>
  <units name="cm_per_s">
    <unit units="metre" multiplier="0.01"/>
    <unit units="second" exponent="-1.0"/>
  </units>
  <units name="mJ_per_mol_per_K">
    <unit units="gram"/>
    <unit units="metre" exponent="2.0"/>
    <unit units="second" exponent="-2.0"/>
    <unit units="kelvin" exponent="-1.0"/>
    <unit units="mole" exponent="-1.0"/>
  </units>
  <units name="mM">
    <unit units="metre" exponent="-3.0"/>
    <unit units="mole"/>
  </units>
  <units name="mS_per_uF">
    <unit units="second" exponent="-1.0" multiplier="1000"/>
  </units>
  <units name="mV">
    <unit units="gram"/>
    <unit units="metre" exponent="2.0"/>
    <unit units="second" exponent="-3.0"/>
    <unit units="ampere" exponent="-1.0"/>
  </units>
  <units name="ms">
    <unit units="second" multiplier="0.001"/>
  </units>
  <units name="pF">
    <unit units="gram" exponent="-1.0" multiplier="1e-15"/>
    <unit units="metre" exponent="-2.0"/>
    <unit units="second" exponent="4.0"/>
    <unit units="ampere" exponent="2.0"/>
  </units>
  <units name="per_mV">
    <unit units="gram" exponent="-1.0"/>
    <unit units="metre" exponent="-2.0"/>
    <unit units="second" exponent="3.0"/>
    <unit units="ampere"/>
  </units>
  <units name="per_mV_per_ms">
    <unit units="gram" exponent="-1.0" multiplier="1000"/>
    <unit units="metre" exponent="-2.0"/>
    <unit units="second" exponent="2.0"/>
    <unit units="ampere"/>
  </units>
  <units name="s_A_per_m3">
    <unit units="metre" exponent="-3.0"/>
    <unit units="second"/>
    <unit units="ampere"/>
  </units>
  <units name="uA_per_cm2">
    <unit units="metre" exponent="-2.0" multiplier="0.01"/>
    <unit units="ampere"/>
  </units>
  <component name="ICa">
    <variable name="Cai" units="mM" public_interface="in"/>
    <variable name="Cao" units="mM" public_interface="in"/>
    <variable name="F" units="C_per_mol" public_interface="in"/>
    <variable name="Ki" units="mM" public_interface="in"/>
    <variable name="Ko" units="mM" public_interface="in"/>
    <variable name="Nai" units="mM" public_interface="in"/>
    <variable name="Nao" units="mM" public_interface="in"/>
    <variable name="Open_Prob" units="dimensionless" cmeta:id="Open_Prob"/>
    <variable name="P_Ca" units="cm_per_s" initial_value="0.0003"/>
    <variable name="P_K" units="cm_per_s" initial_value="1.93e-07"/>
    <variable name="P_Na" units="cm_per_s" initial_value="6.75e-07"/>
    <variable name="R" units="mJ_per_mol_per_K" public_interface="in"/>
    <variable name="T" units="kelvin" public_interface="in"/>
    <variable name="V" units="mV" public_interface="in"/>
    <variable name="d" units="dimensionless" public_interface="in"/>
    <variable name="driving_term_ghk" units="s_A_per_m3" cmeta:id="driving_term_ghk"/>
    <variable name="driving_term_ghk_Ca" units="s_A_per_m3"/>
    <variable name="driving_term_ghk_K" units="s_A_per_m3"/>
    <variable name="driving_term_ghk_Na" units="s_A_per_m3"/>
    <variable name="f" units="dimensionless" public_interface="in"/>
    <variable name="f_Ca" units="dimensionless" public_interface="in"/>
    <variable name="gamma_Cai" units="dimensionless" initial_value="1.0"/>
    <variable name="gamma_Cao" units="dimensionless" initial_value="0.341"/>
    <variable name="gamma_Ki" units="dimensionless" initial_value="0.75"/>
    <variable name="gamma_Ko" units="dimensionless" initial_value="0.75"/>
    <variable name="gamma_Nai" units="dimensionless" initial_value="0.75"/>
    <variable name="gamma_Nao" units="dimensionless" initial_value="0.75"/>
    <variable name="i_Ca" units="uA_per_cm2" cmeta:id="i_Ca"/>
    <math xmlns="http://www.w3.org/1998/Math/MathML">
      <apply>
        <eq/>
        <ci>Open_Prob</ci>
        <apply>
          <times/>
          <apply>
            <times/>
            <ci>d</ci>
            <ci>f</ci>
          </apply>
          <ci>f_Ca</ci>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>driving_term_ghk</ci>
        <apply>
          <divide/>
          <apply>
            <plus/>
            <apply>
              <plus/>
              <apply>
                <times/>
                <ci>P_Ca</ci>
                <ci>driving_term_ghk_Ca</ci>
              </apply>
              <apply>
                <times/>
                <ci>P_K</ci>
                <ci>driving_term_ghk_K</ci>
              </apply>
            </apply>
            <apply>
              <times/>
              <ci>P_Na</ci>
              <ci>driving_term_ghk_Na</ci>
            </apply>
          </apply>
          <ci>P_Ca</ci>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>driving_term_ghk_Ca</ci>
        <apply>
          <divide/>
          <apply>
            <times/>
            <apply>
              <divide/>
              <apply>
                <times/>
                <apply>
                  <times/>
                  <apply>
                    <power/>
                    <cn cellml:units="dimensionless">2.0</cn>
                    <cn cellml:units="dimensionless">2.0</cn>
                  </apply>
                  <ci>V</ci>
                </apply>
                <apply>
                  <power/>
                  <ci>F</ci>
                  <cn cellml:units="dimensionless">2.0</cn>
                </apply>
              </apply>
              <apply>
                <times/>
                <ci>R</ci>
                <ci>T</ci>
              </apply>
            </apply>
            <apply>
              <minus/>
              <apply>
                <times/>
                <apply>
                  <times/>
                  <ci>gamma_Cai</ci>
                  <ci>Cai</ci>
                </apply>
                <apply>
                  <exp/>
                  <apply>
                    <divide/>
                    <apply>
                      <times/>
                      <apply>
                        <times/>
                        <cn cellml:units="dimensionless">2.0</cn>
                        <ci>V</ci>
                      </apply>
                      <ci>F</ci>
                    </apply>
                    <apply>
                      <times/>
                      <ci>R</ci>
                      <ci>T</ci>
                    </apply>
                  </apply>
                </apply>
              </apply>
              <apply>
                <times/>
                <ci>gamma_Cao</ci>
                <ci>Cao</ci>
              </apply>
            </apply>
          </apply>
          <apply>
            <minus/>
            <apply>
              <exp/>
              <apply>
                <divide/>
                <apply>
                  <times/>
                  <apply>
                    <times/>
                    <cn cellml:units="dimensionless">2.0</cn>
                    <ci>V</ci>
                  </apply>
                  <ci>F</ci>
                </apply>
                <apply>
                  <times/>
                  <ci>R</ci>
                  <ci>T</ci>
                </apply>
              </apply>
            </apply>
            <cn cellml:units="dimensionless">1.0</cn>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>driving_term_ghk_K</ci>
        <apply>
          <divide/>
          <apply>
            <times/>
            <apply>
              <divide/>
              <apply>
                <times/>
                <apply>
                  <times/>
                  <apply>
                    <power/>
                    <cn cellml:units="dimensionless">1.0</cn>
                    <cn cellml:units="dimensionless">2.0</cn>
                  </apply>
                  <ci>V</ci>
                </apply>
                <apply>
                  <power/>
                  <ci>F</ci>
                  <cn cellml:units="dimensionless">2.0</cn>
                </apply>
              </apply>
              <apply>
                <times/>
                <ci>R</ci>
                <ci>T</ci>
              </apply>
            </apply>
            <apply>
              <minus/>
              <apply>
                <times/>
                <apply>
                  <times/>
                  <ci>gamma_Ki</ci>
                  <ci>Ki</ci>
                </apply>
                <apply>
                  <exp/>
                  <apply>
                    <divide/>
                    <apply>
                      <times/>
                      <apply>
                        <times/>
                        <cn cellml:units="dimensionless">1.0</cn>
                        <ci>V</ci>
                      </apply>
                      <ci>F</ci>
                    </apply>
                    <apply>
                      <times/>
                      <ci>R</ci>
                      <ci>T</ci>
                    </apply>
                  </apply>
                </apply>
              </apply>
              <apply>
                <times/>
                <ci>gamma_Ko</ci>
                <ci>Ko</ci>
              </apply>
            </apply>
          </apply>
          <apply>
            <minus/>
            <apply>
              <exp/>
              <apply>
                <divide/>
                <apply>
                  <times/>
                  <apply>
                    <times/>
                    <cn cellml:units="dimensionless">1.0</cn>
                    <ci>V</ci>
                  </apply>
                  <ci>F</ci>
                </apply>
                <apply>
                  <times/>
                  <ci>R</ci>
                  <ci>T</ci>
                </apply>
              </apply>
            </apply>
            <cn cellml:units="dimensionless">1.0</cn>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>driving_term_ghk_Na</ci>
        <apply>
          <divide/>
          <apply>
            <times/>
            <apply>
              <divide/>
              <apply>
                <times/>
                <apply>
                  <times/>
                  <apply>
                    <power/>
                    <cn cellml:units="dimensionless">1.0</cn>
                    <cn cellml:units="dimensionless">2.0</cn>
                  </apply>
                  <ci>V</ci>
                </apply>
                <apply>
                  <power/>
                  <ci>F</ci>
                  <cn cellml:units="dimensionless">2.0</cn>
                </apply>
              </apply>
              <apply>
                <times/>
                <ci>R</ci>
                <ci>T</ci>
              </apply>
            </apply>
            <apply>
              <minus/>
              <apply>
                <times/>
                <apply>
                  <times/>
                  <ci>gamma_Nai</ci>
                  <ci>Nai</ci>
                </apply>
                <apply>
                  <exp/>
                  <apply>
                    <divide/>
                    <apply>
                      <times/>
                      <apply>
                        <times/>
                        <cn cellml:units="dimensionless">1.0</cn>
                        <ci>V</ci>
                      </apply>
                      <ci>F</ci>
                    </apply>
                    <apply>
                      <times/>
                      <ci>R</ci>
                      <ci>T</ci>
                    </apply>
                  </apply>
                </apply>
              </apply>
              <apply>
                <times/>
                <ci>gamma_Nao</ci>
                <ci>Nao</ci>
              </apply>
            </apply>
          </apply>
          <apply>
            <minus/>
            <apply>
              <exp/>
              <apply>
                <divide/>
                <apply>
                  <times/>
                  <apply>
                    <times/>
                    <cn cellml:units="dimensionless">1.0</cn>
                    <ci>V</ci>
                  </apply>
                  <ci>F</ci>
                </apply>
                <apply>
                  <times/>
                  <ci>R</ci>
                  <ci>T</ci>
                </apply>
              </apply>
            </apply>
            <cn cellml:units="dimensionless">1.0</cn>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>i_Ca</ci>
        <apply>
          <times/>
          <apply>
            <times/>
            <ci>P_Ca</ci>
            <ci>Open_Prob</ci>
          </apply>
          <ci>driving_term_ghk</ci>
        </apply>
      </apply>
    </math>
  </component>
  <component name="ICa_d_gate">
    <variable name="V" units="mV" public_interface="in"/>
    <variable name="alpha_d" units="mS_per_uF"/>
    <variable name="beta_d" units="mS_per_uF"/>
    <variable name="d" units="dimensionless" public_interface="out" initial_value="2.50653215966786014e-10"/>
    <variable name="d_infinity" units="dimensionless"/>
    <variable name="tau_d" units="ms"/>
    <variable name="time" units="ms" public_interface="in"/>
    <math xmlns="http://www.w3.org/1998/Math/MathML">
      <apply>
        <eq/>
        <ci>alpha_d</ci>
        <apply>
          <divide/>
          <ci>d_infinity</ci>
          <ci>tau_d</ci>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>beta_d</ci>
        <apply>
          <divide/>
          <apply>
            <minus/>
            <cn cellml:units="dimensionless">1.0</cn>
            <ci>d_infinity</ci>
          </apply>
          <ci>tau_d</ci>
        </apply>
      </apply>
      <apply>
        <eq/>
        <apply>
          <diff/>
          <bvar>
            <ci>time</ci>
          </bvar>
          <ci>d</ci>
        </apply>
        <apply>
          <minus/>
          <apply>
            <times/>
            <ci>alpha_d</ci>
            <apply>
              <minus/>
              <cn cellml:units="dimensionless">1.0</cn>
              <ci>d</ci>
            </apply>
          </apply>
          <apply>
            <times/>
            <ci>beta_d</ci>
            <ci>d</ci>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>d_infinity</ci>
        <apply>
          <divide/>
          <cn cellml:units="dimensionless">1.0</cn>
          <apply>
            <plus/>
            <cn cellml:units="dimensionless">1.0</cn>
            <apply>
              <exp/>
              <apply>
                <divide/>
                <apply>
                  <minus/>
                  <apply>
                    <minus/>
                    <ci>V</ci>
                    <cn cellml:units="mV">9.3</cn>
                  </apply>
                </apply>
                <cn cellml:units="mV">5.7</cn>
              </apply>
            </apply>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>tau_d</ci>
        <apply>
          <divide/>
          <apply>
            <times/>
            <ci>d_infinity</ci>
            <apply>
              <minus/>
              <cn cellml:units="dimensionless">1.0</cn>
              <apply>
                <exp/>
                <apply>
                  <divide/>
                  <apply>
                    <minus/>
                    <apply>
                      <plus/>
                      <ci>V</ci>
                      <cn cellml:units="mV">10.0</cn>
                    </apply>
                  </apply>
                  <cn cellml:units="mV">6.24</cn>
                </apply>
              </apply>
            </apply>
          </apply>
          <apply>
            <times/>
            <cn cellml:units="per_mV_per_ms">0.035</cn>
            <apply>
              <plus/>
              <ci>V</ci>
              <cn cellml:units="mV">10.0</cn>
            </apply>
          </apply>
        </apply>
      </apply>
    </math>
  </component>
  <component name="ICa_f_Ca_gate">
    <variable name="Cai" units="mM" public_interface="in"/>
    <variable name="Km_Ca" units="mM" initial_value="0.0006"/>
    <variable name="f_Ca" units="dimensionless" public_interface="out"/>
    <math xmlns="http://www.w3.org/1998/Math/MathML">
      <apply>
        <eq/>
        <ci>f_Ca</ci>
        <apply>
          <divide/>
          <ci>Km_Ca</ci>
          <apply>
            <plus/>
            <ci>Km_Ca</ci>
            <ci>Cai</ci>
          </apply>
        </apply>
      </apply>
    </math>
  </component>
  <component name="ICa_f_gate">
    <variable name="V" units="mV" public_interface="in"/>
    <variable name="alpha_f" units="mS_per_uF"/>
    <variable name="beta_f" units="mS_per_uF"/>
    <variable name="f" units="dimensionless" public_interface="out" initial_value="9.21303768505480014e-01"/>
    <variable name="f_infinity" units="dimensionless"/>
    <variable name="tau_f" units="ms"/>
    <variable name="time" units="ms" public_interface="in"/>
    <math xmlns="http://www.w3.org/1998/Math/MathML">
      <apply>
        <eq/>
        <ci>alpha_f</ci>
        <apply>
          <divide/>
          <ci>f_infinity</ci>
          <ci>tau_f</ci>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>beta_f</ci>
        <apply>
          <divide/>
          <apply>
            <minus/>
            <cn cellml:units="dimensionless">1.0</cn>
            <ci>f_infinity</ci>
          </apply>
          <ci>tau_f</ci>
        </apply>
      </apply>
      <apply>
        <eq/>
        <apply>
          <diff/>
          <bvar>
            <ci>time</ci>
          </bvar>
          <ci>f</ci>
        </apply>
        <apply>
          <minus/>
          <apply>
            <times/>
            <ci>alpha_f</ci>
            <apply>
              <minus/>
              <cn cellml:units="dimensionless">1.0</cn>
              <ci>f</ci>
            </apply>
          </apply>
          <apply>
            <times/>
            <ci>beta_f</ci>
            <ci>f</ci>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>f_infinity</ci>
        <apply>
          <divide/>
          <cn cellml:units="dimensionless">1.0</cn>
          <apply>
            <plus/>
            <cn cellml:units="dimensionless">1.0</cn>
            <apply>
              <exp/>
              <apply>
                <divide/>
                <apply>
                  <plus/>
                  <ci>V</ci>
                  <cn cellml:units="mV">19.7</cn>
                </apply>
                <cn cellml:units="mV">6.8</cn>
              </apply>
            </apply>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>tau_f</ci>
        <apply>
          <divide/>
          <cn cellml:units="dimensionless">1.0</cn>
          <apply>
            <plus/>
            <apply>
              <times/>
              <cn cellml:units="mS_per_uF">0.012</cn>
              <apply>
                <exp/>
                <apply>
                  <times/>
                  <apply>
                    <minus/>
                    <cn cellml:units="dimensionless">1.0</cn>
                  </apply>
                  <apply>
                    <power/>
                    <apply>
                      <times/>
                      <cn cellml:units="per_mV">0.0337</cn>
                      <apply>
                        <minus/>
                        <ci>V</ci>
                        <cn cellml:units="mV">30.0</cn>
                      </apply>
                    </apply>
                    <cn cellml:units="dimensionless">2.0</cn>
                  </apply>
                </apply>
              </apply>
            </apply>
            <cn cellml:units="mS_per_uF">0.012</cn>
          </apply>
        </apply>
      </apply>
    </math>
  </component>
  <component name="Ionic_concentrations">
    <variable name="Cai" units="mM" public_interface="out" initial_value="0.00012" cmeta:id="Cai"/>
    <variable name="Cao" units="mM" public_interface="out" initial_value="2.0" cmeta:id="Cao"/>
    <variable name="Ki" units="mM" public_interface="out" initial_value="140.0" cmeta:id="Ki"/>
    <variable name="Ko" units="mM" public_interface="out" initial_value="4.0" cmeta:id="Ko"/>
    <variable name="Nai" units="mM" public_interface="out" initial_value="10.0" cmeta:id="Nai"/>
    <variable name="Nao" units="mM" public_interface="out" initial_value="138.0" cmeta:id="Nao"/>
  </component>
  <component name="cell">
    <variable name="Cm" units="pF" initial_value="153.4" cmeta:id="Cm"/>
    <variable name="F" units="C_per_mol" public_interface="out" initial_value="96487.0"/>
    <variable name="FonRT" units="per_mV"/>
    <variable name="R" units="mJ_per_mol_per_K" public_interface="out" initial_value="8314.3"/>
    <variable name="T" units="kelvin" public_interface="out" initial_value="310.15"/>
    <variable name="V" units="mV" public_interface="out" cmeta:id="V"/>
    <variable name="duration" units="ms" initial_value="0.5"/>
    <variable name="offset" units="ms" initial_value="100.0"/>
    <variable name="period" units="ms" initial_value="1000.0"/>
    <variable name="time" units="ms" public_interface="in"/>
    <math xmlns="http://www.w3.org/1998/Math/MathML">
      <apply>
        <eq/>
        <ci>FonRT</ci>
        <apply>
          <divide/>
          <ci>F</ci>
          <apply>
            <times/>
            <ci>R</ci>
            <ci>T</ci>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>V</ci>
        <piecewise>
          <piece>
            <cn cellml:units="mV">1.0</cn>
            <apply>
              <lt/>
              <apply>
                <minus/>
                <apply>
                  <minus/>
                  <ci>time</ci>
                  <ci>offset</ci>
                </apply>
                <apply>
                  <times/>
                  <ci>period</ci>
                  <apply>
                    <floor/>
                    <apply>
                      <divide/>
                      <apply>
                        <minus/>
                        <ci>time</ci>
                        <ci>offset</ci>
                      </apply>
                      <ci>period</ci>
                    </apply>
                  </apply>
                </apply>
              </apply>
              <ci>duration</ci>
            </apply>
          </piece>
          <otherwise>
            <cn cellml:units="mV">0.0</cn>
          </otherwise>
        </piecewise>
      </apply>
    </math>
  </component>
  <component name="environment">
    <variable name="time" units="ms" public_interface="out" cmeta:id="time"/>
  </component>
  <connection>
    <map_components component_1="ICa" component_2="ICa_d_gate"/>
    <map_variables variable_1="d" variable_2="d"/>
  </connection>
  <connection>
    <map_components component_1="ICa" component_2="ICa_f_Ca_gate"/>
    <map_variables variable_1="f_Ca" variable_2="f_Ca"/>
  </connection>
  <connection>
    <map_components component_1="ICa" component_2="ICa_f_gate"/>
    <map_variables variable_1="f" variable_2="f"/>
  </connection>
  <connection>
    <map_components component_1="ICa" component_2="Ionic_concentrations"/>
    <map_variables variable_1="Cai" variable_2="Cai"/>
    <map_variables variable_1="Cao" variable_2="Cao"/>
    <map_variables variable_1="Ki" variable_2="Ki"/>
    <map_variables variable_1="Ko" variable_2="Ko"/>
    <map_variables variable_1="Nai" variable_2="Nai"/>
    <map_variables variable_1="Nao" variable_2="Nao"/>
  </connection>
  <connection>
    <map_components component_1="ICa" component_2="cell"/>
    <map_variables variable_1="F" variable_2="F"/>
    <map_variables variable_1="R" variable_2="R"/>
    <map_variables variable_1="T" variable_2="T"/>
    <map_variables variable_1="V" variable_2="V"/>
  </connection>
  <connection>
    <map_components component_1="ICa_d_gate" component_2="cell"/>
    <map_variables variable_1="V" variable_2="V"/>
  </connection>
  <connection>
    <map_components component_1="ICa_d_gate" component_2="environment"/>
    <map_variables variable_1="time" variable_2="time"/>
  </connection>
  <connection>
    <map_components component_1="ICa_f_Ca_gate" component_2="Ionic_concentrations"/>
    <map_variables variable_1="Cai" variable_2="Cai"/>
  </connection>
  <connection>
    <map_components component_1="ICa_f_gate" component_2="cell"/>
    <map_variables variable_1="V" variable_2="V"/>
  </connection>
  <connection>
    <map_components component_1="ICa_f_gate" component_2="environment"/>
    <map_variables variable_1="time" variable_2="time"/>
  </connection>
  <connection>
    <map_components component_1="cell" component_2="environment"/>
    <map_variables variable_1="time" variable_2="time"/>
  </connection>
  <rdf:RDF>
    <rdf:Description rdf:about="#Cai">
      <bqbiol:is rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#cytosolic_calcium_concentration"/>
    </rdf:Description>
    <rdf:Description rdf:about="#Cao">
      <bqbiol:is rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#extracellular_calcium_concentration"/>
    </rdf:Description>
    <rdf:Description rdf:about="#Cm">
      <bqbiol:is rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_capacitance"/>
    </rdf:Description>
    <rdf:Description rdf:about="#Ki">
      <bqbiol:is rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#cytosolic_potassium_concentration"/>
    </rdf:Description>
    <rdf:Description rdf:about="#Ko">
      <bqbiol:is rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#extracellular_potassium_concentration"/>
    </rdf:Description>
    <rdf:Description rdf:about="#Nai">
      <bqbiol:is rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#cytosolic_sodium_concentration"/>
    </rdf:Description>
    <rdf:Description rdf:about="#Nao">
      <bqbiol:is rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#extracellular_sodium_concentration"/>
    </rdf:Description>
    <rdf:Description rdf:about="#Open_Prob">
      <bqbiol:is rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current_open_probability"/>
    </rdf:Description>
    <rdf:Description rdf:about="#V">
      <bqbiol:is rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_voltage"/>
    </rdf:Description>
    <rdf:Description rdf:about="#driving_term_ghk">
      <bqbiol:is rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current_GHK_driving_term"/>
    </rdf:Description>
    <rdf:Description rdf:about="#i_Ca">
      <bqbiol:is rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current"/>
    </rdf:Description>
    <rdf:Description rdf:about="#time">
      <bqbiol:is rdf:resource="https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#time"/>
    </rdf:Description>
  </rdf:RDF>
</model>
