def model Li_Mouse_2010 as
  def unit A_per_F as
    unit gram {mult: 1000};
    unit metre {expo: 2.0};
    unit second {expo: -4.0};
    unit ampere {expo: -1.0};
  enddef;
  def unit C_per_mmol as
    unit second {mult: 1000};
    unit ampere;
    unit mole {expo: -1.0};
  enddef;
  def unit J_per_mol_per_K as
    unit gram {mult: 1000};
    unit metre {expo: 2.0};
    unit second {expo: -2.0};
    unit kelvin {expo: -1.0};
    unit mole {expo: -1.0};
  enddef;
  def unit cm2 as
    unit metre {expo: 2.0, mult: 0.0001};
  enddef;
  def unit m12_per_s_per_mol4_times_1e15 as
    unit metre {expo: 12.0, mult: 1000000000000000};
    unit second {expo: -1.0};
    unit mole {expo: -4.0};
  enddef;
  def unit m3_per_s_per_mol_times_1e6 as
    unit metre {expo: 3.0, mult: 1000000};
    unit second {expo: -1.0};
    unit mole {expo: -1.0};
  enddef;
  def unit m9_per_s_per_mol3_times_1e12 as
    unit metre {expo: 9.0, mult: 1000000000000};
    unit second {expo: -1.0};
    unit mole {expo: -3.0};
  enddef;
  def unit mS_per_uF as
    unit second {expo: -1.0, mult: 1000};
  enddef;
  def unit mV as
    unit gram;
    unit metre {expo: 2.0};
    unit second {expo: -3.0};
    unit ampere {expo: -1.0};
  enddef;
  def unit mV2 as
    unit gram {expo: 2.0};
    unit metre {expo: 4.0};
    unit second {expo: -6.0};
    unit ampere {expo: -2.0};
  enddef;
  def unit mol_per_m3_per_s as
    unit metre {expo: -3.0};
    unit second {expo: -1.0};
    unit mole;
  enddef;
  def unit ms as
    unit second {mult: 0.001};
  enddef;
  def unit per_mV as
    unit gram {expo: -1.0};
    unit metre {expo: -2.0};
    unit second {expo: 3.0};
    unit ampere;
  enddef;
  def unit per_mV_per_ms as
    unit gram {expo: -1.0, mult: 1000};
    unit metre {expo: -2.0};
    unit second {expo: 2.0};
    unit ampere;
  enddef;
  def unit s_A_per_m3 as
    unit metre {expo: -3.0};
    unit second;
    unit ampere;
  enddef;
  def unit uF_per_cm2 as
    unit gram {expo: -1.0, mult: 1e-05};
    unit metre {expo: -4.0};
    unit second {expo: 4.0};
    unit ampere {expo: 2.0};
  enddef;
  def unit uL as
    unit metre {expo: 3.0, mult: 1e-09};
  enddef;
  def unit uM as
    unit metre {expo: -3.0, mult: 0.001};
    unit mole;
  enddef;

  def comp Ions_n_reversal_potentials as
  enddef;

  def comp L_type_calcium_current as
    var Acap: cm2 {pub: in};
    var C: dimensionless;
    var Cao: uM {pub: in};
    var Cass: uM {pub: in};
    var Cm: uF_per_cm2 {pub: in};
    var F: C_per_mmol {pub: in};
    var FVRT: dimensionless;
    var FVRT_Ca: dimensionless;
    var I: dimensionless {init: 4.27651445872852976e-01};
    var K_L: uM {init: 0.3};
    var O: dimensionless {init: 1.23713515513532995e-06};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current_conductance
    var P_CaL: mS_per_uF {init: 2.5};
    var R: J_per_mol_per_K {pub: in};
    var T: kelvin {pub: in};
    var V: mV {pub: in};
    var V_L: mV {init: 0.0};
    var Vss: uL {pub: in};
    var a: dimensionless {init: 0.0625};
    var alpha_m: mS_per_uF;
    var alpha_p: mS_per_uF;
    var b: dimensionless {init: 0.4};
    var const5: mV {init: 8.2};
    var delta_V_L: mV {init: 6.4489};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current_GHK_driving_term
    var driving_term_ghk: s_A_per_m3;
    var epsilon_m: mS_per_uF;
    var epsilon_p: m3_per_s_per_mol_times_1e6;
    var expVL: dimensionless;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current
    var i_CaL: A_per_F {pub: out};
    var i_CaL_max: A_per_F {pub: out, init: 7.0};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_L_type_calcium_current_open_probability
    var open_prob: dimensionless;
    var phi_L: dimensionless {init: 1.798};
    var t_L: ms {init: 1.5};
    var tau_L: ms {init: 1150.0};
    var time: ms {pub: in};
    var y_gate: dimensionless {init: 8.45044436980162961e-01};
    var y_gate_inf: dimensionless;
    var y_gate_tau: ms;
    var y_gate_tau_const1: ms {init: 8.0};
    var y_gate_tau_const2: ms {init: 315.0};
    C = 1.0{dimensionless}-O-I;
    FVRT = F*V/(R*T);
    FVRT_Ca = 2.0{dimensionless}*FVRT;
    ode(I, time) = epsilon_p*Cass*C-epsilon_m*I;
    ode(O, time) = alpha_p*C-alpha_m*O;
    alpha_m = phi_L/t_L;
    alpha_p = expVL/(t_L*(expVL+1.0{dimensionless}));
    driving_term_ghk = -2.0{dimensionless}*F*FVRT_Ca/(1.0{dimensionless}-exp(-FVRT_Ca))*(Cao*exp(-FVRT_Ca)-Cass);
    epsilon_m = b*(expVL+a)/(tau_L*(b*expVL+a));
    epsilon_p = (expVL+a)/(tau_L*K_L*(expVL+1.0{dimensionless}));
    expVL = exp((V-V_L)/delta_V_L);
    i_CaL = sel
      case abs(FVRT_Ca) > 1e-05{dimensionless}:
        P_CaL*Vss/(Acap*Cm)*open_prob*driving_term_ghk;
      otherwise:
        -P_CaL*2.0{dimensionless}*Vss*F/(Acap*Cm)*open_prob*1e-05{dimensionless}/(1.0{dimensionless}-exp(-1e-05{dimensionless}))*(Cao*exp(-1e-05{dimensionless})-Cass);
    endsel;
    open_prob = O*y_gate;
    ode(y_gate, time) = (y_gate_inf-y_gate)/y_gate_tau;
    y_gate_inf = 1.0{dimensionless}/(1.0{dimensionless}+exp((V+33.0{mV})/const5))+0.1{dimensionless}/(1.0{dimensionless}+exp((-V+40.0{mV})/6.0{mV}));
    y_gate_tau = y_gate_tau_const1+y_gate_tau_const2/(1.0{dimensionless}+exp((V+30.0{mV})/4.0{mV}));
  enddef;

  def comp calcium_activated_chloride_current as
    var Cai: uM {pub: in};
    var E_Cl: mV;
    var Km_Cl: uM {init: 10.0};
    var O_ClCa: dimensionless;
    var V: mV {pub: in};
    var g_ClCa: mS_per_uF {init: 10.0};
    var i_ClCa: A_per_F {pub: out};
    E_Cl = -40.0{mV};
    O_ClCa = 0.2{dimensionless}/(1.0{dimensionless}+exp(-(V-46.7{mV})/7.8{mV}));
    i_ClCa = g_ClCa*O_ClCa*Cai/(Cai+Km_Cl)*(V-E_Cl);
  enddef;

  def comp calcium_background_current as
    var Acap: cm2 {pub: in};
    var Cai: uM {pub: in};
    var Cao: uM {pub: in};
    var Cm: uF_per_cm2 {pub: in};
    var E_CaN: mV;
    var F: C_per_mmol {pub: in};
    var J_Cab: mol_per_m3_per_s;
    var R: J_per_mol_per_K {pub: in};
    var T: kelvin {pub: in};
    var V: mV {pub: in};
    var Vmyo: uL {pub: in};
    var g_Cab: mS_per_uF {init: 0.0007};
    var i_Cab: A_per_F {pub: out};
    E_CaN = R*T/(2.0{dimensionless}*F)*ln(Cao/Cai);
    J_Cab = -i_Cab*Acap*Cm/(2.0{dimensionless}*Vmyo*F);
    i_Cab = g_Cab*(V-E_CaN);
  enddef;

  def comp calcium_concentration as
    var Acap: cm2 {pub: in};
    var BJSR: dimensionless;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#cytosolic_calcium_flux_scaling_from_intrinsic_buffers
    var Bi: dimensionless;
    var Bmax: uM {init: 109.0};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#dyadic_space_calcium_flux_scaling_from_intrinsic_buffers
    var Bss: dimensionless;
    var CSQN_tot: uM {init: 50000.0};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#JSR_calcium_concentration
    var CaJSR: uM {pub: out, init: 1.71167969039613013e+02};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#NSR_calcium_concentration
    var CaNSR: uM {pub: out, init: 4.04825013216285981e+02};
    var CaSR: uM;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#cytosolic_calcium_concentration
    var Cai: uM {pub: out, init: 9.49915068139800950e-02};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#dyadic_space_calcium_concentration
    var Cass: uM {pub: out, init: 9.54184301907784055e-02};
    var Cm: uF_per_cm2 {pub: in};
    var F: C_per_mmol {pub: in};
    var J_leak: mol_per_m3_per_s {pub: in};
    var J_rel: mol_per_m3_per_s {pub: in};
    var J_serca: mol_per_m3_per_s {pub: in};
    var J_total: mol_per_m3_per_s;
    var J_tr: mol_per_m3_per_s {pub: in};
    var J_xfer: mol_per_m3_per_s {pub: in};
    var Kd: uM {init: 0.6};
    var Km_CSQN: uM {init: 630.0};
    var VJSR: uL {pub: in};
    var VNSR: uL {pub: in};
    var Vmyo: uL {pub: in};
    var Vss: uL {pub: in};
    var i_CaL: A_per_F {pub: in};
    var i_Cab: A_per_F {pub: in};
    var i_NCX: A_per_F {pub: in};
    var i_pCa: A_per_F {pub: in};
    var time: ms {pub: in};
    BJSR = pow(1.0{dimensionless}+CSQN_tot*Km_CSQN/sqr(Km_CSQN+CaJSR), -1.0{dimensionless});
    Bi = pow(1.0{dimensionless}+Bmax*Kd/sqr(Kd+Cai), -1.0{dimensionless});
    Bss = pow(1.0{dimensionless}+Bmax*Kd/sqr(Kd+Cass), -1.0{dimensionless});
    ode(CaJSR, time) = BJSR*(J_tr-J_rel);
    ode(CaNSR, time) = (J_serca-J_leak)*Vmyo/VNSR-J_tr*VJSR/VNSR;
    CaSR = CaJSR*CSQN_tot/(CaJSR+Km_CSQN)*VJSR/Vmyo+CaNSR*VNSR/Vmyo;
    ode(Cai, time) = Bi*(J_leak+J_xfer-(i_Cab+i_pCa-2.0{dimensionless}*i_NCX)*Acap*Cm/(2.0{dimensionless}*Vmyo*F)-J_serca);
    ode(Cass, time) = Bss*(J_rel*VJSR/Vss-(J_xfer*Vmyo/Vss+i_CaL*Acap*Cm/(2.0{dimensionless}*Vss*F)));
    J_total = -(i_Cab+i_pCa-2.0{dimensionless}*i_NCX)*Acap*Cm/(2.0{dimensionless}*Vmyo*F);
  enddef;

  def comp calcium_fluxes as
    var CaJSR: uM {pub: in};
    var CaMKa: dimensionless;
    var CaMKb: dimensionless;
    var CaMKt: dimensionless {init: 7.29027738385078949e-01};
    var CaNSR: uM {pub: in};
    var Cai: uM {pub: in};
    var Cass: uM {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#SR_leak_current
    var J_leak: mol_per_m3_per_s {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#SR_release_current
    var J_rel: mol_per_m3_per_s {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#SR_uptake_current
    var J_serca: mol_per_m3_per_s {pub: out};
    var J_tr: mol_per_m3_per_s {pub: out};
    var J_xfer: mol_per_m3_per_s {pub: out};
    var Km_up: uM {init: 0.412};
    var P_O1: dimensionless {pub: in};
    var P_O2: dimensionless {pub: in};
    var P_RyR: dimensionless {init: 2.80539508743811027e-04};
    var P_ryr_const1: mS_per_uF;
    var P_ryr_const2: mS_per_uF;
    var V: mV {pub: in};
    var i_CaL: A_per_F {pub: in};
    var i_CaL_max: A_per_F {pub: in};
    var off_rate: mS_per_uF {init: 0.0002};
    var on_rate: mS_per_uF {init: 0.05};
    var prepulses_number: dimensionless {pub: in};
    var stim_period: ms {pub: in};
    var tau_tr: ms {init: 20.0};
    var tau_xfer: ms {init: 8.0};
    var time: ms {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#SR_release_current_max
    var v1: mS_per_uF {init: 4.5};
    var v1_caff: mS_per_uF {init: 10.0};
    var v2: mS_per_uF {init: 3e-05};
    var v2_caff: mS_per_uF {init: 0.1};
    var vmup: mol_per_m3_per_s;
    var vmup_init: mol_per_m3_per_s {init: 0.5059};
    CaMKa = CaMKb+CaMKt;
    CaMKb = 0.05{dimensionless}*(1.0{dimensionless}-CaMKt)*1.0{dimensionless}/(1.0{dimensionless}+0.7{uM}/Cass);
    ode(CaMKt, time) = on_rate*CaMKb*(CaMKb+CaMKt)-off_rate*CaMKt;
    J_leak = sel
      case time < stim_period*prepulses_number:
        v2*(CaNSR-Cai);
      otherwise:
        v2_caff*(CaNSR-Cai);
    endsel;
    J_rel = sel
      case time < stim_period*prepulses_number:
        v1*(P_O1+P_O2)*(CaJSR-Cass)*P_RyR;
      otherwise:
        v1_caff*(CaJSR-Cass);
    endsel;
    J_serca = vmup*sqr(Cai)/(sqr(Km_up)+sqr(Cai));
    J_tr = (CaNSR-CaJSR)/tau_tr;
    J_xfer = (Cass-Cai)/tau_xfer;
    ode(P_RyR, time) = P_ryr_const1*P_RyR+P_ryr_const2*i_CaL/i_CaL_max*exp(-sqr(V-5.0{mV})/648.0{mV2});
    P_ryr_const1 = -0.01{mS_per_uF};
    P_ryr_const2 = -2.0{mS_per_uF};
    vmup = (2.9982{dimensionless}*pow(CaMKa, 2.583{dimensionless})/(pow(1.2444{dimensionless}, 2.583{dimensionless})+pow(CaMKa, 2.583{dimensionless}))+1.0{dimensionless})*vmup_init;
  enddef;

  def comp calcium_pump_current as
    var Acap: cm2 {pub: in};
    var Cai: uM {pub: in};
    var Cm: uF_per_cm2 {pub: in};
    var F: C_per_mmol {pub: in};
    var J_pCa: mol_per_m3_per_s;
    var Km_pCa: uM {init: 0.2885};
    var Vmyo: uL {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_calcium_pump_current
    var i_pCa: A_per_F {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_calcium_pump_current_conductance
    var i_pCa_max: A_per_F {init: 0.0955};
    J_pCa = -i_pCa*Acap*Cm/(2.0{dimensionless}*Vmyo*F);
    i_pCa = i_pCa_max*sqr(Cai)/(sqr(Km_pCa)+sqr(Cai));
  enddef;

  def comp cell as
    var Acap: cm2 {pub: out, init: 1.38660000000000004e-04};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#extracellular_calcium_concentration
    var Cao: uM {pub: out, init: 1400.0};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_capacitance
    var Cm: uF_per_cm2 {pub: out, init: 1.0};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#faraday_constant
    var F: C_per_mmol {pub: out, init: 96.5};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#extracellular_potassium_concentration
    var Ko: uM {pub: out, init: 5400.0};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#extracellular_sodium_concentration
    var Nao: uM {pub: out, init: 134000.0};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#gas_constant
    var R: J_per_mol_per_K {pub: out, init: 8.314};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#temperature
    var T: kelvin {pub: out, init: 308.0};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_voltage
    var V: mV {pub: out, init: -7.89452115785979061e+01};
    var VJSR: uL {pub: out, init: 7.7e-08};
    var VNSR: uL {pub: out, init: 2.31e-07};
    var Vmyo: uL {pub: out, init: 2.2e-05};
    var Vss: uL {pub: out, init: 2.2e-08};
    var i_CaL: A_per_F {pub: in};
    var i_Cab: A_per_F {pub: in};
    var i_ClCa: A_per_F {pub: in};
    var i_K1: A_per_F {pub: in};
    var i_Kr: A_per_F {pub: in};
    var i_Ks: A_per_F {pub: in};
    var i_Kss: A_per_F {pub: in};
    var i_Kto_f: A_per_F {pub: in};
    var i_Kto_s: A_per_F {pub: in};
    var i_Kur: A_per_F {pub: in};
    var i_NCX: A_per_F {pub: in};
    var i_Na: A_per_F {pub: in};
    var i_NaK: A_per_F {pub: in};
    var i_Nab: A_per_F {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current
    var i_Stim: A_per_F {pub: out};
    var i_pCa: A_per_F {pub: in};
    var pace: dimensionless {init: 0.0};
    var past: ms;
    var prepulses_number: dimensionless {pub: out, init: 1.00000000000000000e+10};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current_amplitude
    var stim_amplitude: A_per_F;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_stimulus_current_period
    var stim_period: ms {pub: out, init: 333.333};
    var time: ms {pub: in};
    ode(V, time) = -(i_CaL+i_pCa+i_NCX+i_Cab+i_Na+i_Nab+i_NaK+i_Kto_f+i_Kto_s+i_K1+i_Ks+i_Kur+i_Kss+i_Kr+i_ClCa+i_Stim);
    i_Stim = pace*stim_amplitude;
    past = floor(time/stim_period)*stim_period;
    stim_amplitude = -15.0{A_per_F};
  enddef;

  def comp environment as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#time
    var time: ms {pub: out};
  enddef;

  def comp fast_sodium_current as
    var C_Na1: dimensionless {init: 4.20472760277687996e-04};
    var C_Na2: dimensionless {init: 2.40114508843198987e-02};
    var C_Na3: dimensionless;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#sodium_reversal_potential
    var E_Na: mV {pub: out};
    var F: C_per_mmol {pub: in};
    var I1_Na: dimensionless {init: 5.17471697712382044e-04};
    var I2_Na: dimensionless {init: 2.45406116958508987e-05};
    var IC_Na2: dimensionless {init: 1.74528857380179016e-02};
    var IC_Na3: dimensionless {init: 4.02980726914811016e-01};
    var IF_Na: dimensionless {init: 3.06123648969580978e-04};
    var Ki: uM {pub: in};
    var Ko: uM {pub: in};
    var Nai: uM {pub: in};
    var Nao: uM {pub: in};
    var O_Na: dimensionless {init: 1.46826771436313994e-06};
    var R: J_per_mol_per_K {pub: in};
    var T: kelvin {pub: in};
    var V: mV {pub: in};
    var alpha_Na11: mS_per_uF;
    var alpha_Na12: mS_per_uF;
    var alpha_Na13: mS_per_uF;
    var alpha_Na2: mS_per_uF;
    var alpha_Na3: mS_per_uF;
    var alpha_Na4: mS_per_uF;
    var alpha_Na5: mS_per_uF;
    var beta_Na11: mS_per_uF;
    var beta_Na12: mS_per_uF;
    var beta_Na13: mS_per_uF;
    var beta_Na2: mS_per_uF;
    var beta_Na3: mS_per_uF;
    var beta_Na4: mS_per_uF;
    var beta_Na5: mS_per_uF;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current_conductance
    var g_Na: mS_per_uF {init: 16.0};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_sodium_current
    var i_Na: A_per_F {pub: out};
    var time: ms {pub: in};
    ode(C_Na1, time) = alpha_Na12*C_Na2+beta_Na13*O_Na+alpha_Na3*IF_Na-(beta_Na12*C_Na1+alpha_Na13*C_Na1+beta_Na3*C_Na1);
    ode(C_Na2, time) = alpha_Na11*C_Na3+beta_Na12*C_Na1+alpha_Na3*IC_Na2-(beta_Na11*C_Na2+alpha_Na12*C_Na2+beta_Na3*C_Na2);
    C_Na3 = 1.0{dimensionless}-(O_Na+C_Na1+C_Na2+IF_Na+I1_Na+I2_Na+IC_Na2+IC_Na3);
    E_Na = R*T/F*ln((0.9{dimensionless}*Nao+0.1{dimensionless}*Ko)/(0.9{dimensionless}*Nai+0.1{dimensionless}*Ki));
    ode(I1_Na, time) = alpha_Na4*IF_Na+beta_Na5*I2_Na-(beta_Na4*I1_Na+alpha_Na5*I1_Na);
    ode(I2_Na, time) = alpha_Na5*I1_Na-beta_Na5*I2_Na;
    ode(IC_Na2, time) = alpha_Na11*IC_Na3+beta_Na12*IF_Na+beta_Na3*C_Na2-(beta_Na11*IC_Na2+alpha_Na12*IC_Na2+alpha_Na3*IC_Na2);
    ode(IC_Na3, time) = beta_Na11*IC_Na2+beta_Na3*C_Na3-(alpha_Na11*IC_Na3+alpha_Na3*IC_Na3);
    ode(IF_Na, time) = alpha_Na2*O_Na+beta_Na3*C_Na1+beta_Na4*I1_Na+alpha_Na12*IC_Na2-(beta_Na2*IF_Na+alpha_Na3*IF_Na+alpha_Na4*IF_Na+beta_Na12*IF_Na);
    ode(O_Na, time) = alpha_Na13*C_Na1+beta_Na2*IF_Na-(beta_Na13*O_Na+alpha_Na2*O_Na);
    alpha_Na11 = 3.802{mS_per_uF}/(0.1027{dimensionless}*exp(-(V+2.5{mV})/17.0{mV})+0.2{dimensionless}*exp(-(V+2.5{mV})/150.0{mV}));
    alpha_Na12 = 3.802{mS_per_uF}/(0.1027{dimensionless}*exp(-(V+2.5{mV})/15.0{mV})+0.23{dimensionless}*exp(-(V+2.5{mV})/150.0{mV}));
    alpha_Na13 = 3.802{mS_per_uF}/(0.1027{dimensionless}*exp(-(V+2.5{mV})/12.0{mV})+0.25{dimensionless}*exp(-(V+2.5{mV})/150.0{mV}));
    alpha_Na2 = 1.0{mS_per_uF}/(0.188495{dimensionless}*exp(-(V+7.0{mV})/16.6{mV})+0.393956{dimensionless});
    alpha_Na3 = 7e-07{mS_per_uF}*exp(-(V+7.0{mV})/7.7{mV});
    alpha_Na4 = alpha_Na2/1000.0{dimensionless};
    alpha_Na5 = alpha_Na2/95000.0{dimensionless};
    beta_Na11 = 0.1917{mS_per_uF}*exp(-(V+2.5{mV})/20.3{mV});
    beta_Na12 = 0.2{mS_per_uF}*exp(-(V-2.5{mV})/20.3{mV});
    beta_Na13 = 0.22{mS_per_uF}*exp(-(V-7.5{mV})/20.3{mV});
    beta_Na2 = alpha_Na13*alpha_Na2*alpha_Na3/(beta_Na13*beta_Na3);
    beta_Na3 = 0.0084{mS_per_uF}+2e-05{per_mV_per_ms}*(V+7.0{mV});
    beta_Na4 = alpha_Na3;
    beta_Na5 = alpha_Na3/50.0{dimensionless};
    i_Na = g_Na*O_Na*(V-E_Na);
  enddef;

  def comp fast_transient_outward_K_I as
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#potassium_reversal_potential
    var E_K: mV {pub: out};
    var F: C_per_mmol {pub: in};
    var Ki: uM {pub: in};
    var Ko: uM {pub: in};
    var R: J_per_mol_per_K {pub: in};
    var T: kelvin {pub: in};
    var V: mV {pub: in};
    var alpha_a: mS_per_uF;
    var ato_f: dimensionless {init: 1.42335908879203995e-02};
    var beta_a: mS_per_uF;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_fast_transient_outward_current_conductance
    var g_Kto_f: mS_per_uF {init: 0.5347};
    var i_Kto_f: A_per_F {pub: out};
    var ito_f: dimensionless {init: 9.96989882138173966e-01};
    var itof_iss: dimensionless;
    var tau_ito_f: ms;
    var time: ms {pub: in};
    E_K = R*T/F*ln(Ko/Ki);
    alpha_a = 0.18064{mS_per_uF}*exp(0.03577{per_mV}*(V+45.0{mV}));
    ode(ato_f, time) = alpha_a*(1.0{dimensionless}-ato_f)-beta_a*ato_f;
    beta_a = 0.3956{mS_per_uF}*exp(-0.06237{per_mV}*(V+45.0{mV}));
    i_Kto_f = g_Kto_f*pow(ato_f, 3.0{dimensionless})*ito_f*(V-E_K);
    ode(ito_f, time) = (itof_iss-ito_f)/tau_ito_f;
    itof_iss = 1.0{dimensionless}/(1.0{dimensionless}+exp((V+51.4{mV})/5.0{mV}));
    tau_ito_f = 9.6645{ms}+10.9362{ms}/(1.0{dimensionless}+exp((V+51.4{mV})/5.0{mV}));
  enddef;

  def comp intracellular_currents as
  enddef;

  def comp non_inactivating_steady_state_K_I as
    var E_K: mV {pub: in};
    var V: mV {pub: in};
    var aKss: dimensionless {init: 2.87585636847048021e-01};
    var ass: dimensionless {pub: in};
    var g_Kss: mS_per_uF {init: 0.0595};
    var iKss: dimensionless {init: 1.0};
    var i_Kss: A_per_F {pub: out};
    var tau_Kss: ms;
    var time: ms {pub: in};
    ode(aKss, time) = (ass-aKss)/tau_Kss;
    ode(iKss, time) = 0.0{mS_per_uF};
    i_Kss = g_Kss*aKss*iKss*(V-E_K);
    tau_Kss = 39.3{ms}*exp(-0.05{per_mV}*V)+13.17{ms};
  enddef;

  def comp potassium_concentration as
    var Acap: cm2 {pub: in};
    var Cm: uF_per_cm2 {pub: in};
    var F: C_per_mmol {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#cytosolic_potassium_concentration
    var Ki: uM {pub: out, init: 1.15599506425669999e+05};
    var Vmyo: uL {pub: in};
    var i_K1: A_per_F {pub: in};
    var i_Kr: A_per_F {pub: in};
    var i_Ks: A_per_F {pub: in};
    var i_Kss: A_per_F {pub: in};
    var i_Kto_f: A_per_F {pub: in};
    var i_Kto_s: A_per_F {pub: in};
    var i_Kur: A_per_F {pub: in};
    var i_NaK: A_per_F {pub: in};
    var i_Stim: A_per_F {pub: in};
    var time: ms {pub: in};
    ode(Ki, time) = -(i_Stim+i_Kto_f+i_Kto_s+i_K1+i_Ks+i_Kss+i_Kur+i_Kr-2.0{dimensionless}*i_NaK)*Acap*Cm/(Vmyo*F);
  enddef;

  def comp rapid_delayed_rectifier_K_I as
    var C_K0: dimensionless;
    var C_K1: dimensionless {init: 1.17334339571230004e-03};
    var C_K2: dimensionless {init: 1.05586824723736010e-03};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#rapid_delayed_rectifier_potassium_reversal_potential
    var E_Kr: mV;
    var F: C_per_mmol {pub: in};
    var I_K: dimensionless {init: 1.40618453684943990e-03};
    var Ki: uM {pub: in};
    var Ko: uM {pub: in};
    var Nai: uM {pub: in};
    var Nao: uM {pub: in};
    var O_K: dimensionless {init: 1.31742086125972001e-02};
    var R: J_per_mol_per_K {pub: in};
    var T: kelvin {pub: in};
    var V: mV {pub: in};
    var alpha_a0: mS_per_uF;
    var alpha_a1: mS_per_uF;
    var alpha_i: mS_per_uF;
    var beta_a0: mS_per_uF;
    var beta_a1: mS_per_uF;
    var beta_i: mS_per_uF;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_rapid_delayed_rectifier_potassium_current_conductance
    var g_Kr: mS_per_uF {init: 0.0165};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_rapid_delayed_rectifier_potassium_current
    var i_Kr: A_per_F {pub: out};
    var kb: mS_per_uF {init: 0.036778};
    var kf: mS_per_uF {init: 0.023761};
    var time: ms {pub: in};
    C_K0 = 1.0{dimensionless}-(C_K1+C_K2+O_K+I_K);
    ode(C_K1, time) = alpha_a0*C_K0+kb*C_K2-(beta_a0*C_K1+kf*C_K1);
    ode(C_K2, time) = kf*C_K1+beta_a1*O_K-(kb*C_K2+alpha_a1*C_K2);
    E_Kr = R*T/F*ln((0.98{dimensionless}*Ko+0.02{dimensionless}*Nao)/(0.98{dimensionless}*Ki+0.02{dimensionless}*Nai));
    ode(I_K, time) = alpha_i*O_K-beta_i*I_K;
    ode(O_K, time) = alpha_a1*C_K2+beta_i*I_K-(beta_a1*O_K+alpha_i*O_K);
    alpha_a0 = 0.022348{mS_per_uF}*exp(0.01176{per_mV}*V);
    alpha_a1 = 0.0335{mS_per_uF}*exp(0.0109{per_mV}*V);
    alpha_i = 0.0703{mS_per_uF}*exp(0.0287{per_mV}*(V+5.0{mV}));
    beta_a0 = 0.047002{mS_per_uF}*exp(-0.0631{per_mV}*V);
    beta_a1 = 6.89e-05{mS_per_uF}*exp(-0.04178{per_mV}*V);
    beta_i = 0.006497{mS_per_uF}*exp(-0.03268{per_mV}*(V+5.0{mV}));
    i_Kr = g_Kr*O_K*(V-E_Kr);
  enddef;

  def comp ryanodine_receptors as
    var Cass: uM {pub: in};
    var P_C1: dimensionless;
    var P_C2: dimensionless {init: 5.65182571165673053e-01};
    var P_O1: dimensionless {pub: out, init: 5.71393383393734976e-03};
    var P_O2: dimensionless {pub: out, init: 2.09864618235341008e-08};
    var k_minus_a: mS_per_uF {init: 0.07125};
    var k_minus_b: mS_per_uF {init: 0.965};
    var k_minus_c: mS_per_uF {init: 0.0008};
    var k_plus_a: m12_per_s_per_mol4_times_1e15 {init: 0.006075};
    var k_plus_b: m9_per_s_per_mol3_times_1e12 {init: 0.00405};
    var k_plus_c: mS_per_uF {init: 0.009};
    var m: dimensionless {init: 3.0};
    var n: dimensionless {init: 4.0};
    var time: ms {pub: in};
    P_C1 = 1.0{dimensionless}-(P_C2+P_O1+P_O2);
    ode(P_C2, time) = k_plus_c*P_O1-k_minus_c*P_C2;
    ode(P_O1, time) = k_plus_a*pow(Cass, n)*P_C1+k_minus_b*P_O2+k_minus_c*P_C2-(k_minus_a*P_O1+k_plus_b*pow(Cass, m)*P_O1+k_plus_c*P_O1);
    ode(P_O2, time) = k_plus_b*pow(Cass, m)*P_O1-k_minus_b*P_O2;
  enddef;

  def comp slow_delayed_rectifier_K_I as
    var E_K: mV {pub: in};
    var V: mV {pub: in};
    var alpha_n: mS_per_uF;
    var beta_n: mS_per_uF;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_slow_delayed_rectifier_potassium_current_conductance
    var g_Ks: mS_per_uF {init: 0.00575};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_slow_delayed_rectifier_potassium_current
    var i_Ks: A_per_F {pub: out};
    var nKs: dimensionless {init: 3.36735013094628015e-03};
    var time: ms {pub: in};
    alpha_n = 4.81332999999999970e-06{per_mV_per_ms}*(V+26.5{mV})/(1.0{dimensionless}-exp(-0.128{per_mV}*(V+26.5{mV})));
    beta_n = 9.53332999999999974e-05{mS_per_uF}*exp(-0.038{per_mV}*(V+26.5{mV}));
    i_Ks = g_Ks*sqr(nKs)*(V-E_K);
    ode(nKs, time) = alpha_n*(1.0{dimensionless}-nKs)-beta_n*nKs;
  enddef;

  def comp slow_transient_outward_K_I as
    var E_K: mV {pub: in};
    var V: mV {pub: in};
    var ass: dimensionless {pub: in};
    var ato_s: dimensionless {init: 4.43263407760381978e-02};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_slow_transient_outward_current_conductance
    var g_Kto_s: mS_per_uF {init: 0.0};
    var i_Kto_s: A_per_F {pub: out};
    var iss: dimensionless {pub: in};
    var ito_s: dimensionless {init: 8.87568880831387963e-01};
    var tau_ta_s: ms;
    var tau_ti_s: ms;
    var time: ms {pub: in};
    ode(ato_s, time) = (ass-ato_s)/tau_ta_s;
    i_Kto_s = g_Kto_s*ato_s*ito_s*(V-E_K);
    ode(ito_s, time) = (iss-ito_s)/tau_ti_s;
    tau_ta_s = 0.493{ms}*exp(-0.0629{per_mV}*V)+2.058{ms};
    tau_ti_s = 270.0{ms}+1050.0{ms}/(1.0{dimensionless}+exp((V+45.2{mV})/5.7{mV}));
  enddef;

  def comp sodium_background_current as
    var E_Na: mV {pub: in};
    var V: mV {pub: in};
    var g_Nab: mS_per_uF {init: 0.0026};
    var i_Nab: A_per_F {pub: out};
    i_Nab = g_Nab*(V-E_Na);
  enddef;

  def comp sodium_calcium_exchange_current as
    var Acap: cm2 {pub: in};
    var Cai: uM {pub: in};
    var Cao: uM {pub: in};
    var Cm: uF_per_cm2 {pub: in};
    var F: C_per_mmol {pub: in};
    var J_ncx: mol_per_m3_per_s;
    var K_mAllo: uM {init: 0.0};
    var K_mCai: uM {init: 3.6};
    var K_mCao: uM {init: 1400.0};
    var K_mNai: uM {init: 12000.0};
    var K_mNao: uM {init: 88000.0};
    var Nai: uM {pub: in};
    var Nao: uM {pub: in};
    var R: J_per_mol_per_K {pub: in};
    var T: kelvin {pub: in};
    var V: mV {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_sodium_calcium_exchanger_current_conductance
    var V_max_NCX: A_per_F {init: 3.939};
    var Vmyo: uL {pub: in};
    var eta: dimensionless {init: 0.35};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_sodium_calcium_exchanger_current
    var i_NCX: A_per_F {pub: out};
    var k_sat: dimensionless {init: 0.27};
    J_ncx = i_NCX*Acap*Cm/(Vmyo*F);
    i_NCX = V_max_NCX/(1.0{dimensionless}+sqr(K_mAllo/Cai))*(pow(Nai, 3.0{dimensionless})*Cao*exp(eta*V*F/(R*T))-pow(Nao, 3.0{dimensionless})*Cai*exp((eta-1.0{dimensionless})*V*F/(R*T)))/((K_mCao*pow(Nai, 3.0{dimensionless})+pow(K_mNao, 3.0{dimensionless})*Cai+pow(K_mNai, 3.0{dimensionless})*Cao*(1.0{dimensionless}+Cai/K_mCai)+K_mCai*pow(Nao, 3.0{dimensionless})*(1.0{dimensionless}+pow(Nai/K_mNai, 3.0{dimensionless}))+pow(Nai, 3.0{dimensionless})*Cao+pow(Nao, 3.0{dimensionless})*Cai)*(1.0{dimensionless}+k_sat*exp((eta-1.0{dimensionless})*V*F/(R*T))));
  enddef;

  def comp sodium_concentration as
    var Acap: cm2 {pub: in};
    var Cm: uF_per_cm2 {pub: in};
    var F: C_per_mmol {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#cytosolic_sodium_concentration
    var Nai: uM {pub: out, init: 1.23647482121793000e+04};
    var Vmyo: uL {pub: in};
    var i_NCX: A_per_F {pub: in};
    var i_Na: A_per_F {pub: in};
    var i_NaK: A_per_F {pub: in};
    var i_Nab: A_per_F {pub: in};
    var time: ms {pub: in};
    ode(Nai, time) = -(i_Na+i_Nab+3.0{dimensionless}*i_NaK+3.0{dimensionless}*i_NCX)*Acap*Cm/(Vmyo*F);
  enddef;

  def comp sodium_potassium_pump_current as
    var F: C_per_mmol {pub: in};
    var Km_Ko: uM {init: 1500.0};
    var Km_Nai: uM {init: 16600.0};
    var Ko: uM {pub: in};
    var Nai: uM {pub: in};
    var Nao: uM {pub: in};
    var R: J_per_mol_per_K {pub: in};
    var T: kelvin {pub: in};
    var V: mV {pub: in};
    var f_NaK: dimensionless;
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_sodium_potassium_pump_current
    var i_NaK: A_per_F {pub: out};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_sodium_potassium_pump_current_permeability
    var i_NaK_max: A_per_F {init: 2.486};
    var sigma: dimensionless;
    f_NaK = 1.0{dimensionless}/(1.0{dimensionless}+0.1245{dimensionless}*exp(-0.1{dimensionless}*V*F/(R*T))+0.0365{dimensionless}*sigma*exp(-V*F/(R*T)));
    i_NaK = i_NaK_max*f_NaK*1.0{dimensionless}/(1.0{dimensionless}+pow(Km_Nai/Nai, 2.4{dimensionless}))*Ko/(Ko+Km_Ko);
    sigma = 1.0{dimensionless}/7.0{dimensionless}*(exp(Nao/67300.0{uM})-1.0{dimensionless});
  enddef;

  def comp time_independent_K_I as
    var E_K: mV {pub: in};
    var Ko: uM {pub: in};
    var V: mV {pub: in};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_inward_rectifier_potassium_current_conductance
    var g_K1: mS_per_uF {init: 0.35};
    // is: https://chaste.comlab.ox.ac.uk/cellml/ns/oxford-metadata#membrane_inward_rectifier_potassium_current
    var i_K1: A_per_F {pub: out};
    i_K1 = g_K1*Ko/(Ko+210.0{uM})*(V-E_K)/(1.0{dimensionless}+exp(0.0896{per_mV}*(V-E_K)));
  enddef;

  def comp transcell_currents as
  enddef;

  def comp ultra_rapidly_activating_delayed_rectifier_K_I as
    var E_K: mV {pub: in};
    var V: mV {pub: in};
    var ass: dimensionless {pub: out};
    var aur: dimensionless {init: 3.46258606821816996e-03};
    var g_Kur: mS_per_uF {init: 0.25};
    var i_Kur: A_per_F {pub: out};
    var iss: dimensionless {pub: out};
    var iur: dimensionless {init: 9.55684946168061988e-01};
    var tau_aur: ms;
    var tau_i_const: ms {init: 643.0};
    var tau_iur: ms;
    var time: ms {pub: in};
    ass = 1.0{dimensionless}/(1.0{dimensionless}+exp(-(V+6.19{mV})/9.6{mV}));
    ode(aur, time) = (ass-aur)/tau_aur;
    i_Kur = g_Kur*aur*iur*(V-E_K);
    iss = 1.0{dimensionless}/(1.0{dimensionless}+exp((V+42.1{mV})/5.4{mV}));
    ode(iur, time) = (iss-iur)/tau_iur;
    tau_aur = 0.493{ms}*exp(-0.0629{per_mV}*V)+2.058{ms};
    tau_iur = tau_i_const+1000.0{ms}/(1.0{dimensionless}+exp((V+42.1{mV})/5.4{mV}));
  enddef;
  def map between L_type_calcium_current and calcium_concentration for
    vars Cass and Cass;
    vars i_CaL and i_CaL;
  enddef;
  def map between L_type_calcium_current and calcium_fluxes for
    vars i_CaL and i_CaL;
    vars i_CaL_max and i_CaL_max;
  enddef;
  def map between L_type_calcium_current and cell for
    vars Acap and Acap;
    vars Cao and Cao;
    vars Cm and Cm;
    vars F and F;
    vars R and R;
    vars T and T;
    vars V and V;
    vars Vss and Vss;
    vars i_CaL and i_CaL;
  enddef;
  def map between L_type_calcium_current and environment for
    vars time and time;
  enddef;
  def map between calcium_activated_chloride_current and calcium_concentration for
    vars Cai and Cai;
  enddef;
  def map between calcium_activated_chloride_current and cell for
    vars V and V;
    vars i_ClCa and i_ClCa;
  enddef;
  def map between calcium_background_current and calcium_concentration for
    vars Cai and Cai;
    vars i_Cab and i_Cab;
  enddef;
  def map between calcium_background_current and cell for
    vars Acap and Acap;
    vars Cao and Cao;
    vars Cm and Cm;
    vars F and F;
    vars R and R;
    vars T and T;
    vars V and V;
    vars Vmyo and Vmyo;
    vars i_Cab and i_Cab;
  enddef;
  def map between calcium_concentration and calcium_fluxes for
    vars CaJSR and CaJSR;
    vars CaNSR and CaNSR;
    vars Cai and Cai;
    vars Cass and Cass;
    vars J_leak and J_leak;
    vars J_rel and J_rel;
    vars J_serca and J_serca;
    vars J_tr and J_tr;
    vars J_xfer and J_xfer;
  enddef;
  def map between calcium_concentration and calcium_pump_current for
    vars Cai and Cai;
    vars i_pCa and i_pCa;
  enddef;
  def map between calcium_concentration and cell for
    vars Acap and Acap;
    vars Cm and Cm;
    vars F and F;
    vars VJSR and VJSR;
    vars VNSR and VNSR;
    vars Vmyo and Vmyo;
    vars Vss and Vss;
  enddef;
  def map between calcium_concentration and environment for
    vars time and time;
  enddef;
  def map between calcium_concentration and ryanodine_receptors for
    vars Cass and Cass;
  enddef;
  def map between calcium_concentration and sodium_calcium_exchange_current for
    vars Cai and Cai;
    vars i_NCX and i_NCX;
  enddef;
  def map between calcium_fluxes and cell for
    vars V and V;
    vars prepulses_number and prepulses_number;
    vars stim_period and stim_period;
  enddef;
  def map between calcium_fluxes and environment for
    vars time and time;
  enddef;
  def map between calcium_fluxes and ryanodine_receptors for
    vars P_O1 and P_O1;
    vars P_O2 and P_O2;
  enddef;
  def map between calcium_pump_current and cell for
    vars Acap and Acap;
    vars Cm and Cm;
    vars F and F;
    vars Vmyo and Vmyo;
    vars i_pCa and i_pCa;
  enddef;
  def map between cell and environment for
    vars time and time;
  enddef;
  def map between cell and fast_sodium_current for
    vars F and F;
    vars Ko and Ko;
    vars Nao and Nao;
    vars R and R;
    vars T and T;
    vars V and V;
    vars i_Na and i_Na;
  enddef;
  def map between cell and fast_transient_outward_K_I for
    vars F and F;
    vars Ko and Ko;
    vars R and R;
    vars T and T;
    vars V and V;
    vars i_Kto_f and i_Kto_f;
  enddef;
  def map between cell and non_inactivating_steady_state_K_I for
    vars V and V;
    vars i_Kss and i_Kss;
  enddef;
  def map between cell and potassium_concentration for
    vars Acap and Acap;
    vars Cm and Cm;
    vars F and F;
    vars Vmyo and Vmyo;
    vars i_Stim and i_Stim;
  enddef;
  def map between cell and rapid_delayed_rectifier_K_I for
    vars F and F;
    vars Ko and Ko;
    vars Nao and Nao;
    vars R and R;
    vars T and T;
    vars V and V;
    vars i_Kr and i_Kr;
  enddef;
  def map between cell and slow_delayed_rectifier_K_I for
    vars V and V;
    vars i_Ks and i_Ks;
  enddef;
  def map between cell and slow_transient_outward_K_I for
    vars V and V;
    vars i_Kto_s and i_Kto_s;
  enddef;
  def map between cell and sodium_background_current for
    vars V and V;
    vars i_Nab and i_Nab;
  enddef;
  def map between cell and sodium_calcium_exchange_current for
    vars Acap and Acap;
    vars Cao and Cao;
    vars Cm and Cm;
    vars F and F;
    vars Nao and Nao;
    vars R and R;
    vars T and T;
    vars V and V;
    vars Vmyo and Vmyo;
    vars i_NCX and i_NCX;
  enddef;
  def map between cell and sodium_concentration for
    vars Acap and Acap;
    vars Cm and Cm;
    vars F and F;
    vars Vmyo and Vmyo;
  enddef;
  def map between cell and sodium_potassium_pump_current for
    vars F and F;
    vars Ko and Ko;
    vars Nao and Nao;
    vars R and R;
    vars T and T;
    vars V and V;
    vars i_NaK and i_NaK;
  enddef;
  def map between cell and time_independent_K_I for
    vars Ko and Ko;
    vars V and V;
    vars i_K1 and i_K1;
  enddef;
  def map between cell and ultra_rapidly_activating_delayed_rectifier_K_I for
    vars V and V;
    vars i_Kur and i_Kur;
  enddef;
  def map between environment and fast_sodium_current for
    vars time and time;
  enddef;
  def map between environment and fast_transient_outward_K_I for
    vars time and time;
  enddef;
  def map between environment and non_inactivating_steady_state_K_I for
    vars time and time;
  enddef;
  def map between environment and potassium_concentration for
    vars time and time;
  enddef;
  def map between environment and rapid_delayed_rectifier_K_I for
    vars time and time;
  enddef;
  def map between environment and ryanodine_receptors for
    vars time and time;
  enddef;
  def map between environment and slow_delayed_rectifier_K_I for
    vars time and time;
  enddef;
  def map between environment and slow_transient_outward_K_I for
    vars time and time;
  enddef;
  def map between environment and sodium_concentration for
    vars time and time;
  enddef;
  def map between environment and ultra_rapidly_activating_delayed_rectifier_K_I for
    vars time and time;
  enddef;
  def map between fast_sodium_current and potassium_concentration for
    vars Ki and Ki;
  enddef;
  def map between fast_sodium_current and sodium_background_current for
    vars E_Na and E_Na;
  enddef;
  def map between fast_sodium_current and sodium_concentration for
    vars Nai and Nai;
    vars i_Na and i_Na;
  enddef;
  def map between fast_transient_outward_K_I and non_inactivating_steady_state_K_I for
    vars E_K and E_K;
  enddef;
  def map between fast_transient_outward_K_I and potassium_concentration for
    vars Ki and Ki;
    vars i_Kto_f and i_Kto_f;
  enddef;
  def map between fast_transient_outward_K_I and slow_delayed_rectifier_K_I for
    vars E_K and E_K;
  enddef;
  def map between fast_transient_outward_K_I and slow_transient_outward_K_I for
    vars E_K and E_K;
  enddef;
  def map between fast_transient_outward_K_I and time_independent_K_I for
    vars E_K and E_K;
  enddef;
  def map between fast_transient_outward_K_I and ultra_rapidly_activating_delayed_rectifier_K_I for
    vars E_K and E_K;
  enddef;
  def map between non_inactivating_steady_state_K_I and potassium_concentration for
    vars i_Kss and i_Kss;
  enddef;
  def map between non_inactivating_steady_state_K_I and ultra_rapidly_activating_delayed_rectifier_K_I for
    vars ass and ass;
  enddef;
  def map between potassium_concentration and rapid_delayed_rectifier_K_I for
    vars Ki and Ki;
    vars i_Kr and i_Kr;
  enddef;
  def map between potassium_concentration and slow_delayed_rectifier_K_I for
    vars i_Ks and i_Ks;
  enddef;
  def map between potassium_concentration and slow_transient_outward_K_I for
    vars i_Kto_s and i_Kto_s;
  enddef;
  def map between potassium_concentration and sodium_potassium_pump_current for
    vars i_NaK and i_NaK;
  enddef;
  def map between potassium_concentration and time_independent_K_I for
    vars i_K1 and i_K1;
  enddef;
  def map between potassium_concentration and ultra_rapidly_activating_delayed_rectifier_K_I for
    vars i_Kur and i_Kur;
  enddef;
  def map between rapid_delayed_rectifier_K_I and sodium_concentration for
    vars Nai and Nai;
  enddef;
  def map between slow_transient_outward_K_I and ultra_rapidly_activating_delayed_rectifier_K_I for
    vars ass and ass;
    vars iss and iss;
  enddef;
  def map between sodium_background_current and sodium_concentration for
    vars i_Nab and i_Nab;
  enddef;
  def map between sodium_calcium_exchange_current and sodium_concentration for
    vars Nai and Nai;
    vars i_NCX and i_NCX;
  enddef;
  def map between sodium_concentration and sodium_potassium_pump_current for
    vars Nai and Nai;
    vars i_NaK and i_NaK;
  enddef;
enddef;
